PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = firstTask
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Routines
  Routine Instructions
    TextComponent instructions1
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hello! Welcome to the task :)
      wrapWidth = 1.3
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
    TextComponent text
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine regCues
    TextComponent regCuesText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.00
      text [set every repeat] = $RegulationCues
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        print("Hello, world!")
  Routine pic
    ImageComponent image
      image [set every repeat] = $ImageStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.00
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  Routine ratings
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.00
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.00
      text = How much joy do you feel?
      wrapWidth = 1.3
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Flow
  Routine Instructions
  Routine isi
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = regConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'RegulationCues': 'LOOK', 'ImageStim': 'deer.jpg'},
      {'RegulationCues': 'FAR', 'ImageStim': 'dog1.jpg'},
      {'RegulationCues': 'CLOSE', 'ImageStim': 'dog8.jpg'}]
    Routine regCues
    Routine isi
    Routine pic
    Routine isi
    Routine ratings
  LoopTerminator trials
